PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instruction
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    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        阅读并记住每句话，
        完成记忆后开始回想刚才的话，
        期间尽量减少肢体运动，
        减少思绪游移，
        按下回车键开始实验
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine trials_1
    RoutineSettingsComponent trials_1
      stopVal [duration (s)] = 10
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    ParallelOutComponent p_port_6
      address = 0x0378
      register = EIO
      startData = 50
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from psychopy import visual, core
        import pandas as pd
        import string

        file_path = 'text2.xlsx'  # 文件路径

        # 读取Excel文件
        df = pd.read_excel(file_path)

        # 获取所有句子
        all_sentences = df['句子'].astype(str).tolist()

        # 初始化全局索引，跟踪当前的句子
        current_sentence_index = 0
      Begin Experiment:
        # Split the text into characters - Note: this now happens per trial, not here globally
        # Therefore, we won't split any text into characters at this point.

        # Initialize global variables that will be used across multiple trials
        char_stims = []  # This will be used to hold character TextStim objects for the current sentence
        chars = []  # This will store the list of characters for the current sentence

        # Set initial position and spacing for the characters on the screen
        start_x = -0.9  # Adjust based on text length
        spacing = 0.05  # Adjust spacing as needed
      Begin Routine:
        # 使用 global 关键字声明 current_sentence_index
        global current_sentence_index

        # 检查是否还有句子可以显示
        if current_sentence_index < len(all_sentences):
            current_sentence = all_sentences[current_sentence_index]
            chars = list(current_sentence)
            char_stims = []
            spacing = min(0.07, 1.8 / len(chars))  # 确保文本不会超出屏幕宽度
            total_text_length = len(chars) * spacing  # 总的文本长度

            # 计算起始位置，使得文本在屏幕正中央
            start_x = -total_text_length / 2 + 0.04 # 根据字符总长度将起始位置左移一半

            # 创建每个字符的 TextStim 对象
            for i, char in enumerate(chars):
                stim = visual.TextStim(
                    win=win,
                    text=char,
                    font='SimSun',
                    pos=(start_x + i * spacing, 0),  # 水平位置根据起始位置和字符间距计算
                    height=0.08,  # 字符的高度，可以根据屏幕大小调整
                    color='white'
                )
                char_stims.append(stim)

            # 初始化字符计时器和索引
            char_timer = core.Clock()
            char_timer.reset()
            current_char_index = 0
        else:
            # 没有更多句子可用，结束实验
            core.quit()
      Each Frame:
        # 使用 string.punctuation 定义所有的标点符号，也可以根据需要自己定义特殊的标点符号集
        punctuation = string.punctuation + "，。？！：；、“”‘’"  # 包含常见中文标点符号

        # 确保 Routine 继续运行
        continueRoutine = True

        # 设置每个字符高亮显示的持续时间（秒）
        char_duration = 0.4

        # 检查是否需要更新高亮的字符
        if char_timer.getTime() >= char_duration:
            char_timer.reset()
            current_char_index += 1

            # 跳过标点符号
            while current_char_index < len(chars) and chars[current_char_index] in punctuation:
                current_char_index += 1

        # 绘制字符
        if current_char_index < len(chars):
            for i, stim in enumerate(char_stims):
                if i == current_char_index:
                    # 当前字符高亮显示（例如，红色）
                    stim.color = 'red'
                else:
                    stim.color = 'white'
                stim.draw()
        else:
            # 所有字符已显示完毕，结束 Routine
            continueRoutine = False
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine end
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    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        实验结束
        按0键退出
    KeyboardComponent key_resp_3
      allowedKeys = 'num_0'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine blank
    RoutineSettingsComponent blank
      stopVal [duration (s)] = 1.8
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    ParallelOutComponent p_port_4
      address = 0x0378
      register = EIO
      startData = 101
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent text_5
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine rest
    RoutineSettingsComponent rest
      stopVal [duration (s)] = 600
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    ParallelOutComponent p_port_3
      address = 0x0378
      register = EIO
      startData = 200
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine rest_intro
    RoutineSettingsComponent rest_intro
      stopVal [duration (s)] = 3
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        请调整自己的精神，
        接下来是10分钟的静息状态，
        尽量保持情绪平稳的冥想状态，
        可以闭眼或睁眼地放松，
        身体保持静止
  Routine recall_1
    RoutineSettingsComponent recall_1
      stopVal [duration (s)] = 10
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    ParallelOutComponent p_port
      address = 0x0378
      register = EIO
      startData = 100
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        # Split the text into characters - Note: this now happens per trial, not here globally
        # Therefore, we won't split any text into characters at this point.

        # Initialize global variables that will be used across multiple trials
        char_stims = []  # This will be used to hold character TextStim objects for the current sentence
        chars = []  # This will store the list of characters for the current sentence

        # Set initial position and spacing for the characters on the screen
        start_x = -0.9  # Adjust based on text length
        spacing = 0.05  # Adjust spacing as needed
      Begin Routine:
        # 检查是否还有句子可以显示
        if current_sentence_index < len(all_sentences):
            current_sentence = all_sentences[current_sentence_index]
            chars = list(current_sentence)
            chars.append('1')

            char_stims = []
            spacing = min(0.07, 1.8 / len(chars))  # 确保文本不会超出屏幕宽度
            total_text_length = len(chars) * spacing  # 总的文本长度

            # 计算起始位置，使得文本在屏幕正中央
            start_x = -total_text_length / 2 + 0.04 # 根据字符总长度将起始位置左移一半

            # 创建每个字符的 TextStim 对象
            for i, char in enumerate(chars):
                stim = visual.TextStim(
                    win=win,
                    text='',
                    font='SimSun',
                    pos=(start_x + i * spacing, 0),  # 水平位置根据起始位置和字符间距计算
                    height=0.08,  # 字符的高度，可以根据屏幕大小调整
                    color='white'
                )
                char_stims.append(stim)

            # 初始化字符计时器和索引
            char_timer = core.Clock()
            char_timer.reset()
            current_char_index = 0
        else:
            # 没有更多句子可用，结束实验
            core.quit()
      Each Frame:
        # 使用 string.punctuation 定义所有的标点符号，也可以根据需要自己定义特殊的标点符号集
        punctuation = string.punctuation + "，。？！：；、“”‘’"  # 包含常见中文标点符号

        # 确保 Routine 继续运行
        continueRoutine = True

        # 设置每个字符高亮显示的持续时间（秒）
        char_duration = 0.4

        # 检查是否需要更新高亮的字符
        if char_timer.getTime() >= char_duration:
            char_timer.reset()
            current_char_index += 1

            # 跳过标点符号
            while current_char_index < len(chars) and chars[current_char_index] in punctuation:
                current_char_index += 1

        # 绘制字符
        if current_char_index < len(chars):
            for i, stim in enumerate(char_stims):
                if i == current_char_index:
                    # 当前字符高亮显示（例如，红色）
                    stim.color = 'red'
                else:
                    stim.color = 'white'
                stim.draw()
        else:
            # 所有字符已显示完毕，结束 Routine
            continueRoutine = False
      End Routine:
        current_sentence_index += 1
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine trials_2
    RoutineSettingsComponent trials_2
      stopVal [duration (s)] = 10
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    ParallelOutComponent p_port_7
      address = 0x0378
      register = EIO
      startData = 50
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        # Split the text into characters - Note: this now happens per trial, not here globally
        # Therefore, we won't split any text into characters at this point.

        # Initialize global variables that will be used across multiple trials
        char_stims = []  # This will be used to hold character TextStim objects for the current sentence
        chars = []  # This will store the list of characters for the current sentence

        # Set initial position and spacing for the characters on the screen
        start_x = -0.9  # Adjust based on text length
        spacing = 0.05  # Adjust spacing as needed
      Begin Routine:
        # 检查是否还有句子可以显示
        if current_sentence_index < len(all_sentences):
            current_sentence = all_sentences[current_sentence_index]
            chars = list(current_sentence)
            char_stims = []
            spacing = min(0.07, 1.8 / len(chars))  # 确保文本不会超出屏幕宽度
            total_text_length = len(chars) * spacing  # 总的文本长度

            # 计算起始位置，使得文本在屏幕正中央
            start_x = -total_text_length / 2 + 0.04 # 根据字符总长度将起始位置左移一半

            # 创建每个字符的 TextStim 对象
            for i, char in enumerate(chars):
                stim = visual.TextStim(
                    win=win,
                    text=char,
                    font='SimSun',
                    pos=(start_x + i * spacing, 0),  # 水平位置根据起始位置和字符间距计算
                    height=0.08,  # 字符的高度，可以根据屏幕大小调整
                    color='white'
                )
                char_stims.append(stim)

            # 初始化字符计时器和索引
            char_timer = core.Clock()
            char_timer.reset()
            current_char_index = 0
        else:
            # 没有更多句子可用，结束实验
            core.quit()
      Each Frame:
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine recall_2
    RoutineSettingsComponent recall_2
      stopVal [duration (s)] = 10
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    ParallelOutComponent p_port_2
      address = 0x0378
      register = EIO
      startData = 100
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        # Split the text into characters - Note: this now happens per trial, not here globally
        # Therefore, we won't split any text into characters at this point.

        # Initialize global variables that will be used across multiple trials
        char_stims = []  # This will be used to hold character TextStim objects for the current sentence
        chars = []  # This will store the list of characters for the current sentence

        # Set initial position and spacing for the characters on the screen
        start_x = -0.9  # Adjust based on text length
        spacing = 0.05  # Adjust spacing as needed
      Begin Routine:
        # 检查是否还有句子可以显示
        if current_sentence_index < len(all_sentences):
            current_sentence = all_sentences[current_sentence_index]
            chars = list(current_sentence)
            chars.append('1')

            char_stims = []
            spacing = min(0.07, 1.8 / len(chars))  # 确保文本不会超出屏幕宽度
            total_text_length = len(chars) * spacing  # 总的文本长度

            # 计算起始位置，使得文本在屏幕正中央
            start_x = -total_text_length / 2 + 0.04 # 根据字符总长度将起始位置左移一半

            # 创建每个字符的 TextStim 对象
            for i, char in enumerate(chars):
                stim = visual.TextStim(
                    win=win,
                    text='',
                    font='SimSun',
                    pos=(start_x + i * spacing, 0),  # 水平位置根据起始位置和字符间距计算
                    height=0.08,  # 字符的高度，可以根据屏幕大小调整
                    color='white'
                )
                char_stims.append(stim)

            # 初始化字符计时器和索引
            char_timer = core.Clock()
            char_timer.reset()
            current_char_index = 0
        else:
            # 没有更多句子可用，结束实验
            core.quit()
      Each Frame:
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      End Routine:
        current_sentence_index += 1
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine wait
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        阅读并记住每句话，
        完成记忆后开始回想刚才的话，
        期间尽量减少肢体运动，减少思绪游移
        如果你准备好了，按下回车键继续实验
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sound_intro
    RoutineSettingsComponent sound_intro
      stopVal [duration (s)] = 10
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    ParallelOutComponent p_port_5
      address = 0x0378
      register = EIO
      startData = 201
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    SoundComponent sound_1
      sound [set every repeat] = 1.wav
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        好了，冥想结束，
        接下来是下一组实验
Flow
  Routine instruction
  LoopInitiator loop_1 loopType="TrialHandler"
    loopType = sequential
    nReps = 126
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    conditions:
      [{'句子': '附近还有其他的酒店吗'},
      {'句子': '我们只有没有淋浴的房间'},
      {'句子': '来这里，我能看到高大的樟树'},
      {'句子': '这是很棒的植物园'}]
    Routine trials_1
    Routine recall_1
    Routine blank
  LoopTerminator loop_1
  Routine rest_intro
  Routine rest
  Routine sound_intro
  Routine wait
  LoopInitiator loop_2 loopType="TrialHandler"
    loopType = random
    nReps = 126
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    Routine trials_2
    Routine recall_2
    Routine blank
  LoopTerminator loop_2
  Routine end
